CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:426
GitHash:
ModuleCount:17
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['Module notes are provided by Jenna Tomkinson.', '', 'Images module is left blank since we are giving the path to the images in the CLI command.', '', '']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
    Filter images?:Images only
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
Metadata:[module_num:2|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notes:['Metadata is extracted from the file names using regular expressions. Metadata included are well, FOV, time, and z-slice, and channel.']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^W(?P<Well>[0-9]{4})F(?P<FOV>[0-9]{4})T(?P<Time>[0-9]{4})Z(?P<Z_slice>[0-9]{3})C(?P<Channel>[0-9]{1})
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['This pipeline assigns names to 2 channels specifically:', '', '01 = DNA/Hoechst staining', '05 = AnnexinV staining']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:5
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does Channel "1")
    Name to assign these images:GSDM
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "2")
    Name to assign these images:CL488
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "3")
    Name to assign these images:CL561
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "4")
    Name to assign these images:DNA
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does Channel "5")
    Name to assign these images:BF
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['Given this timelapse data, we group by Well and FOV.']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
    Do you want to group your images?:Yes
    grouping metadata count:2
    Metadata category:Well
    Metadata category:FOV

IdentifyPrimaryObjects:[module_num:5|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notes:['Segment nuclei from the DNA channel. These are the same parameters for nuclei segmentation as the 4ch pipeline. ']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
    Select the input image:DNA
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):35,90
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:4.0464
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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    Size of adaptive window:80
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    Thresholding method:Minimum Cross-Entropy

ImageMath:[module_num:6|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Whole_Cell
    Image or measurement?:Image
    Select the first image:CL488
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CL561
    Multiply the second image by:1.0
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    Image or measurement?:Image
    Select the third image:GSDM
    Multiply the third image by:1.0
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:Whole_Cell
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:IdentifySecondaryObjects
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureGranularity:[module_num:9|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
    Select images to measure:BF, CL488, CL561, DNA, GSDM, Whole_Cell
    Measure within objects?:Yes
    Select objects to measure:Cytoplasm, IdentifySecondaryObjects, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureImageIntensity:[module_num:10|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
    Select images to measure:BF, CL488, CL561, DNA, GSDM, Whole_Cell
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
MeasureObjectIntensity:[module_num:11|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
    Select images to measure:BF, CL488, CL561, DNA, GSDM, Whole_Cell
    Select objects to measure:Cytoplasm, IdentifySecondaryObjects, Nuclei

MeasureObjectIntensityDistribution:[module_num:12|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
    Select images to measure:BF, CL488, CL561, DNA, GSDM, Whole_Cell
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:IdentifySecondaryObjects
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:Cytoplasm
    Select neighboring objects to measure:Cytoplasm
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectOverlap:[module_num:14|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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:Cytoplasm
    Select the objects to be tested for overlap against the ground truth:Cytoplasm
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

MeasureObjectSizeShape:[module_num:15|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
    Select object sets to measure:Cytoplasm, IdentifySecondaryObjects, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:16|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
    Select images to measure:BF, CL488, CL561, DNA, GSDM, Whole_Cell
    Select objects to measure:Cytoplasm, IdentifySecondaryObjects, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToDatabase:[module_num:17|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:pyroptosis_timelapse.sqlite
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:pyroptosis_timelapse
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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