CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:11
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|/home/lippincmDocuments/pyroptosis_live-cell_timelapse/Wave2_data/5.feature_extraction/loadfiles/plate_2/B2_1_T0001/
    Name of the file:load_file.csv
    Load images based on this data?:Yes
    Base image location:None|mnt/bandicoot/live_cell_timelapse_pyroptosis_project_data/processed_data/1.illumination_corrected_files/plate_2
    Process just a range of rows?:No
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    Group images by metadata?:No
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    Rescale intensities?:Yes

RelateObjects:[module_num:2|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
    Parent objects:Nuclei
    Child objects:Cells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
IdentifyTertiaryObjects:[module_num:3|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureObjectSizeShape:[module_num:4|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureColocalization:[module_num:5|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
    Select images to measure:SYTOXGreen, NucleoLive, CL640, CL488
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Across entire image
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    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:6|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
    Select images to measure:SYTOXGreen, NucleoLive, CL640, CL488
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:7|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
    Select images to measure:CL488, CL640, NucleoLive, SYTOXGreen
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectIntensityDistribution:[module_num:8|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
    Select images to measure:SYTOXGreen, NucleoLive, CL640, CL488
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:Magnitudes and phase
    Maximum zernike moment:9
    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectNeighbors:[module_num:9|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureTexture:[module_num:10|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
    Select images to measure:SYTOXGreen, NucleoLive, CL640, CL488
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:1
    Measure whole images or objects?:Both
    Texture scale to measure:3

ExportToDatabase:[module_num:11|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
    Database type:SQLite
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    Add a prefix to table names?:No
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    Output file location:Default Output Folder|
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:pyroptosis_timelapse.sqlite
    Calculate the per-image mean values of object measurements?:No
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:One table per object type
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    Write image thumbnails directly to the database?:No
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    Experiment name:pyroptosis_timelapse
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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